PsychoPy2experiment version="2021.2.3"
Settings
  Audio lib = pygame
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
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Routines
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $id_sonido
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.35
      syncScreenRefresh = False
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    KeyboardComponent key_resp
      allowedKeys = 'a','e','i','o','u'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sonido_coma.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('id_sonido', 'sonidos\\uno.wav')]),
      OrderedDict([('id_sonido', 'sonidos\\dos.wav')])]
    Routine trial
  LoopTerminator trials
